PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.0
  Window size (pixels) = [1440, 900]
  color = $[0.6549, 0.6549, 0.6549]
  expName = diacriticsTwoWordTasks
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Routines
  Routine trial
  Routine innitialCode
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        randint = function(min, maxplusone) {
          return Math.floor((Math.random() * (maxplusone - min) )) + min;
        }

        /* The randint() function on python includes the lower limit and excludes the upper limit,
        i.e.: (0,3) would yiled three numbers: 0, 1, 2.
        When it is converting it to Javascript, it includes the upper limit,
        i.e.: (0,3) would yield 4 numbers: 0, 1, 2, 3.
        This code component changes the conversion to Javascript, in order for it to match python.*/
    CodeComponent initalCode
      Code Type = Auto->JS
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      Begin Experiment:
        list_Dist=["شريف","شَرِيفٌ","حزين","حَزِينٍ","سؤال","سُؤْالُ","نصوص","نُصُوصٌ","حقوق","حُقُوقَ","عميد","عَمِيداً","جريحة","جَرِيحَة","إنشاء","إِنْشَاء","متروك","مَتْرُوك","معدود","مَعْدُود","أسرار","أَسْرَار","مفعول","مَفْعُول","كتاب","كِتَابٌ","تأجير","تَأْجِير","تارك","تَارِكاً","سعيد","سَعِيدُ","إجرام","إِجْرَام","مدروس","مَدْرُوس","تقليب","تَقْلِيب","طريق","طَرِيقَ","جميل","جَمِيلُ","إنسان","إِنْسَان","إجابة","إِجابَةٌ","موقوف","مَوْقُوف","دروس","دُرُوسَ","ممنون","مَمْنُون","عارف","عَارِفٌ","سريع","سَرِيعُ","كريمة","كَرِيمَة","أولاد ","أَوْلَاد","لمان","لَمَانْ","شمان","شَمَانُ","سقوق","سُقُوقُ","مجقوح","مَجْقوحْ","مجقول","مَجقُولٌ","شديف","شَدْيفُ","أصرج","أَصرَجُ","أصرض","أَصْرَض","أجغر","أَجْغَر","سلاد","سَلَادْ","علاد","عَلْادِ","رموع","رُمُوعُ","قادل","قَادِلُ","قودل","قُودَلَ","حوضوع","حُوضُوعِ","ضظرم","ضَظْرَم","ضعرم","ضَعْرَم","ذثلق","ذَثلُقُ","هتثمع","هَتثَمَع","متثمع","مُتَثمِع","رسلبق","رَسُلبِق","قغرصذ","قَغرَصُذ","قغجصذ","قُغجُصْذ","شلبفر","شُلبَفُر","فبدص","فُبدَصِ","فبدث","فُبْدَث","نمتق","نَمتُقَ","ثطلدم","ثَطَلدُم","لنظك","لَنظَكِ","كنهقة","كَنِهقَة",]
        fontsize=0.2
  Routine commoneInstructions
    ImageComponent CommonInst
      image = CommonInst .png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent CommonInstResp
      allowedKeys [set every repeat] = 'space','s','l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDInst1
    ImageComponent LDInst_1
      image = LDInst1.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent LDInst1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDInst2
    ImageComponent LDInst_2
      image = LDInst2.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent LDInst2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDPracticeInst
    ImageComponent practiceInst
      image = LDPractice.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixationInst
    ImageComponent fixationInst_1
      image = Reminder.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent fixationInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine taskInst
    CodeComponent LDTaskCode
      Code Type = Auto->JS
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      Begin Routine:
        LDInstructrions.setAlignHoriz('left')
        LDInstructionArb.setAlignHoriz('right')
    KeyboardComponent LDTaskResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent LDInstructrions
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
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      text:
        You will now start the experimental block.

        Please answer as quickly and as accurately as possible.

        Press space to continue.
    TextComponent LDInstructionArb
      color = black
      letterHeight = 0.05
      pos = (0.4, 0.15)
      startVal [time (s)] = 0.0
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      text:
        ستبدأ الآن التجربة الفعلية ضمن هذه المجموعة

        يرجى الإجابة بسرعة و بدقة

        اضغط على شريط المسافة للمتابعة
  Routine fixationInst_2
    ImageComponent fixationInst_3
      image = Reminder.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent fixattionInst_2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDInst1
    ImageComponent SDInst_1
      image = SDInst1.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent SDInst1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDInst2
    ImageComponent SDInst_2
      image = SDInst2.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent SDInst2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDInst3
    ImageComponent SDInst_3
      image = SD_InstArb3.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDInst4
    ImageComponent SDInst_4
      image = SD_InstArb4.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDPracticeInst
    ImageComponent SDPractiveInst_1
      image = SDPractice.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent SDPracticeInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDInst3
    ImageComponent LDInst_3
      image = Lex-InstArb3.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDInst4
    ImageComponent LDInst_4
      image = Lex-InstArb4.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixationInst_4
    ImageComponent fixationInst_5
      image = Reminder.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent fixationInst4Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_2
    ImageComponent breakInst
      image = Break.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDTaskInst
    CodeComponent SDTaskCode
      Code Type = Auto->JS
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      Begin Routine:
        SDInstructrions.setAlignHoriz('left')
        SDInstructionArb.setAlignHoriz('right')
    KeyboardComponent SDTaskResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent SDInstructrions
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
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      text:
        You will now start the experimental block.

        Please answer as quickly and as accurately as possible.

        Press space to continue.
    TextComponent SDInstructionArb
      color = black
      letterHeight = 0.05
      pos = (0.4, 0.15)
      startVal [time (s)] = 0.0
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      text:
        ستبدأ الآن التجربة الفعلية ضمن هذه المجموعة

        يرجى الإجابة بسرعة و بدقة

        اضغط على شريط المسافة للمتابعة
  Routine fixationInst_6
    ImageComponent fixationInst_7
      image = Reminder.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent fixationInst6Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SDCommonInst
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        if nRepsTask2==1:
            inst=CommonInst.png
        else:
            inst=Break.png
    ImageComponent SDInstructions
      image [set every repeat] = $inst
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine lineAttempt
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = line
      size = (0.65, 8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LDBreak
    CodeComponent LDBreakCode
      Code Type = Auto->JS
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      Begin Routine:
        endOfLD.setAlignHoriz('left')
        endOfLDArb.setAlignHoriz('right')
    KeyboardComponent LDBreakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent endOfLD
      color = black
      letterHeight = 0.04
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
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      text:
        You have completed this experimental block.
        Please DO NOT press Esc or close the tab while taking a break.
        When you are ready, press Space to continue.
    TextComponent endOfLDArb
      color = black
      letterHeight = 0.05
      pos = (0.4, 0.15)
      startVal [time (s)] = 0.0
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      text:
        إنتهت هذه المجموعة.
        لا تغلق الصفحة و لا تضغط على مفتاح Escape.
        عندما تصبح جاهزاً، اضغط على شريط المسلفة (Space) للمتاعة.
  Routine SDInitalCode
    CodeComponent SDInitalCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        SDlist_limit=60
        SDword1_Dist=["أسعد","أسعد","أسعد","أسعد","أسعد","أخرج","أخرج","أخرج","أخرج","أخرج","قائل","قائل","قائل","قائل","قائل","صريح","صريح","صريح","صريح","صريح","مقالة","مقالة","مقالة","مقالة","مقالة","اعتدى","اعتدى","اعتدى","اعتدى","اعتدى","سماح","سماح","سماح","سماح","سماح","أدان","أدان","أدان","أدان","أدان","أرعب","أرعب","أرعب","أرعب","أرعب","أجبر","أجبر","أجبر","أجبر","أجبر","أسلم","أسلم","أسلم","أسلم","أسلم","رجوع","رجوع","رجوع","رجوع","رجوع",]
        SDword2_Dist=["أوعد","مسعود","محول","أسعد","أسعد","أعرج","خارج","مسألة","أخرج","أخرج","قائم","يقول","تراث","قائل","قائل","جريح","صارح","معرض","صريح","صريح","محالة","يقولون","عصافير","مقالة","مقالة","ارتدى","عداوة","حقيبة","اعتدى","اعتدى","سلاح","سامح","قاتل","سماح","سماح","أبان","مدين","شعور","أدان","أدان","أركب","مرعب","ساعد","أرعب","أرعب","أدبر","مجبر","راحل","أجبر","أجبر","أعلم","سالم","راجع","أسلم","أسلم","ركوع","أرجع","قارئ","رجوع","رجوع",]
        fontsize=0.2
  Routine SDTask
    CodeComponent SDCode
      Code Type = Auto->JS
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      Begin Experiment:
        stim1=""
        stim2=""
        xstim1=""
        ystim1=""
        xstim2=""
        ystim2=''
        stim1_D=""
        stim2_D=""
        xstim1_D=""
        ystim1_D=""
        xstim2_D=""
        ysim2_D=""
      Begin Routine:
        g=randint(0,2) #This randomizes which is word 1 and which is word 2
        #D_int=randint(0,SDlist_limit)

        if g==1:
            stim1=word1
            stim2=word2
            xstim1=xword1
            ystim1=yword1
            xstim2=xword2
            ystim2=yword2
            xstim1_D=xword1_D
            ystim1_D=yword1_D
            xstim2_D=xword2_D
            ystim2_D=yword2_D
            stim1_D=word1_D
            stim2_D=word2_D

        else:
            stim1=word2
            stim2=word1
            xstim1=xword2
            ystim1=yword2
            xstim2=xword1
            ystim2=yword1
            xstim1_D=xword2_D
            ystim1_D=yword2_D
            xstim2_D=xword1_D
            ystim2_D=yword1_D
            stim1_D=word2_D
            stim2_D=word1_D

        #distractor="word" #Defining the distractor because it could be a nonword or consonant in the LD task
      Each Frame:
        #SDPracticeTrial.addData('distractor',distractor)
    PolygonComponent SDFixation_2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.04,0.04)
      startVal [time (s)] = 0.3
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    TextComponent SDWord1
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim1, ystim1)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim1
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    TextComponent SDDist1
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim1_D, ystim1_D)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim1_D
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    PolygonComponent cue_4
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xstim1, -0.11)
      saveStartStop = False
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_4
      image = noiseRect.png
      pos [set every repeat] = (xstim1, ystim1)
      saveStartStop = False
      size = (0.5, 0.25)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_D_4
      image = noiseRect.png
      pos [set every repeat] = (xstim1_D, ystim1_D)
      saveStartStop = False
      size = (0.5, 0.25)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    TextComponent SDWord2
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim2, ystim2)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim2
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    TextComponent SDDist2
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim2_D, ystim2_D)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim2_D
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    PolygonComponent cue_5
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xstim2, -0.11)
      saveStartStop = False
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent SDResp
      allowedKeys [set every repeat] = '1','2','esc'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine SDPractice
    CodeComponent SDPracticeCode
      Code Type = Auto->JS
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      Begin Experiment:
        stim1=""
        stim2=""
        xstim1=""
        ystim1=""
        xstim2=""
        ystim2=''
        stim1_D=""
        stim2_D=""
        xstim1_D=""
        ystim1_D=""
        xstim2_D=""
        ysim2_D=""
      Begin Routine:
        g=randint(0,2) #This randomizes which is word 1 and which is word 2
        D_int=randint(0,SDlist_limit)

        if g==1:
            stim1=word1
            stim2=word2
            xstim1=xword1
            ystim1=yword1
            xstim2=xword2
            ystim2=yword2
            xstim1_D=-xstim1
            ystim1_D=-ystim1
            xstim2_D=-xstim2
            ystim2_D=-ystim2
            stim1_D=SDword1_Dist[int(D_int)]
            stim2_D=SDword2_Dist[int(D_int)]

        else:
            stim1=word2
            stim2=word1
            xstim1=xword2
            ystim1=yword2
            xstim2=xword1
            ystim2=yword1
            xstim1_D=-xstim1
            ystim1_D=-ystim1
            xstim2_D=-xstim2
            ystim2_D=-ystim2
            stim1_D=SDword1_Dist[int(D_int)]
            stim2_D=SDword2_Dist[int(D_int)]

        distractor="word" #Defining the distractor because it could be a nonword or consonant in the LD task
      Each Frame:
        SDPracticeTrial.addData('distractor',distractor)
    PolygonComponent SDFixation
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.04,0.04)
      startVal [time (s)] = 0.3
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    TextComponent SDPracticeWord1
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim1, ystim1)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim1
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    TextComponent SDPracticeDist1
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim1_D, ystim1_D)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim1_D
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    PolygonComponent cue_3
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xstim1, -0.11)
      saveStartStop = False
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_3
      image = noiseRect.png
      pos [set every repeat] = (xstim1, ystim1)
      saveStartStop = False
      size = (0.5, 0.25)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_D_3
      image = noiseRect.png
      pos [set every repeat] = (xstim1_D, ystim1_D)
      saveStartStop = False
      size = (0.5, 0.25)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    TextComponent SDPracticeWord2
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim2, ystim2)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim2
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    TextComponent SDPracticeDist2
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim2_D, ystim2_D)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim2_D
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    PolygonComponent cue_6
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xstim2, -0.11)
      saveStartStop = False
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent SDPracticeResp
      allowedKeys [set every repeat] = '1','2','esc'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine LDTask
    CodeComponent LDCode
      Code Type = Auto->JS
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      Begin Experiment:
        #xstim1_D=""
        #ystim1_D=""
        #stim1_D=""
      Begin Routine:
        #D_int=randint(0,84)

        #xstim1_D=-xword1
        #ystim1_D=-yword1
        #stim1_D=list_Dist[int(D_int)]

        #if D_int<48:
        #    distractor="word"
        #elif D_int>66:
        #    distractor="consonants"
        #else:
        #    distractor="pseudoword"
      End Routine:
        #LDTrial.addData('distractor',distractor)
    PolygonComponent fixation_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.04,0.04)
      startVal [time (s)] = 0.2
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    ImageComponent noiseImage_2
      image = noiseRect.png
      pos [set every repeat] = (xword1,yword1)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_D_2
      image = noiseRect.png
      pos [set every repeat] = (xstim1_D,ystim1_D)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
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    TextComponent LDWord_1
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xword1, yword1)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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      text [set every repeat]:
        $word1
    TextComponent distWord_2
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xword1_D, yword1_D)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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      text [set every repeat]:
        $word1_D
    PolygonComponent cue_2
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xword1, -0.11)
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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    KeyboardComponent LDResponse
      allowedKeys [set every repeat] = '1','2','esc'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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  Routine LDPractice
    CodeComponent LDPracticeCode
      Code Type = Auto->JS
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      Begin Experiment:
        xstim1_D=""
        ystim1_D=""
        stim1_D=""
      Begin Routine:
        D_int=randint(0,84)

        xstim1_D=-xword1
        ystim1_D=-yword1
        stim1_D=list_Dist[int(D_int)]

        if D_int<48:
            distractor="word"
        elif D_int>66:
            distractor="consonants"
        else:
            distractor="pseudoword"
      End Routine:
        practiceTrial.addData('distractor',distractor)
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.04,0.04)
      startVal [time (s)] = 0.2
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    ImageComponent noiseImage
      image = noiseRect.png
      pos [set every repeat] = (xword1,yword1)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
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    ImageComponent noiseImage_D
      image = noiseRect.png
      pos [set every repeat] = (xstim1_D,ystim1_D)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
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    TextComponent wordPractice
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xword1, yword1)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $word1
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    TextComponent distWord
      color = black
      font = Courier
      languageStyle = Arabic
      letterHeight = fontsize
      pos [set every repeat] = (xstim1_D, ystim1_D)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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      text [set every repeat]:
        $stim1_D
    PolygonComponent cue
      fillColor = black
      lineColor = black
      pos [set every repeat] = (xword1, -0.11)
      shape = line
      size = (0.65, 3)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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    KeyboardComponent PracticeResponse
      allowedKeys [set every repeat] = '1','2','esc'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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  Routine LDPRacticeResponse
    CodeComponent LDPractFeedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        soundfile=[800,400]
      Begin Routine:
        if PracticeResponse.corr:
            feedbackPitch=soundfile[0]
        else:
            feedbackPitch=soundfile[1]
    SoundComponent feedback
      saveStartStop = False
      sound [set every repeat] = $feedbackPitch
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.03
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  Routine LDResponse_2
    CodeComponent LDFeedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        soundfile=[800,400]
      Begin Routine:
        if LDResponse.corr:
            feedbackPitch=soundfile[0]
        else:
            feedbackPitch=soundfile[1]
    SoundComponent feedback_2
      saveStartStop = False
      sound [set every repeat] = $feedbackPitch
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.03
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  Routine SDPracticeResponse
    CodeComponent SDPractFeedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        soundfile=[800,400]
      Begin Routine:
        if SDPracticeResp.corr:
            feedbackPitch=soundfile[0]
        else:
            feedbackPitch=soundfile[1]
    SoundComponent feedback_3
      saveStartStop = False
      sound [set every repeat] = $feedbackPitch
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.03
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  Routine SDResponse
    CodeComponent SDFeedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        soundfile=[800,400]
      Begin Routine:
        if SDResp.corr:
            feedbackPitch=soundfile[0]
        else:
            feedbackPitch=soundfile[1]
    SoundComponent feedback_4
      saveStartStop = False
      sound [set every repeat] = $feedbackPitch
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.03
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  Routine SDBreak
    CodeComponent SDBreakCode
      Code Type = Auto->JS
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      Begin Routine:
        endOfSD.setAlignHoriz('left')
        endOfSDArb.setAlignHoriz('right')
    KeyboardComponent SDBreakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent endOfSD
      color = black
      letterHeight = 0.04
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
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      text:
        You have completed this experimental block.
        Please DO NOT press Esc or close the tab while taking a break.
        When you are ready, press Space to continue.
    TextComponent endOfSDArb
      color = black
      letterHeight = 0.05
      pos = (0.4, 0.15)
      startVal [time (s)] = 0.0
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      text:
        إنتهت هذه المجموعة.
        لا تغلق الصفحة و لا تضغط على مفتاح Escape.
        عندما تصبح جاهزاً، اضغط على شريط المسلفة (Space) للمتاعة.
  Routine orderChange
    CodeComponent orderChangeCode
      Code Type = Auto->JS
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      Begin Experiment:
        if o==0:
            o+=1 #Changing o so that on the second loop a different language is presented
        elif o==1:
            o-=1
  Routine taskOrderCode
    CodeComponent taskOrderCode_
      Code Type = Auto->JS
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      Begin Experiment:
        #r=randint(0,1)

        #if CommonInstResp1==1:
        #    nRepsL=1
        #    nRepsS=0
        #elif CommonInstResp1==0:
        #    nRepsL=0
        #    nRepsS=1
        #else:
        #    nRepsL=r
        #    if r==0:
        #        nRepsS=r+1
        #    else:
        #        nRepsS=r-1
    ImageComponent CommonInst1
      image = CommonInst.png
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent CommonInstResp1
      allowedKeys [set every repeat] = 'space','0','1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator taskOrder loopType="TrialHandler"
    conditionsFile = TaskOrder.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'nRepsTask1': 1, 'nRepsTask2': 0},
      {'nRepsTask1': 0, 'nRepsTask2': 1}]
    Routine taskOrderCode
    LoopInitiator LDTaskOrder loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask1
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      Routine innitialCode
      Routine LDInst1
      Routine LDInst2
      Routine LDPracticeInst
      Routine fixationInst
      LoopInitiator practiceTrial loopType="TrialHandler"
        conditionsFile = PracticeArb.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'wordE': '2ejaba', 'word1': 'جواب', 'xword1': -0.4, 'yword1': 0, 'visualField': 'left', 'word': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'jawab', 'word1': 'جَوَابُ', 'xword1': -0.4, 'yword1': 0, 'visualField': 'left', 'word': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'laman', 'word1': 'لمان', 'xword1': -0.4, 'yword1': 0, 'visualField': 'left', 'word': 'pseudoword', 'corrAns': 2, 'task': 'LDT'},
          {'wordE': 'dazerm', 'word1': 'ضَظْرَم', 'xword1': 0.4, 'yword1': 0, 'visualField': 'right', 'word': 'consonants', 'corrAns': 2, 'task': 'LDT'},
          {'wordE': 'majkou7', 'word1': 'مَجْقوحْ', 'xword1': 0.4, 'yword1': 0, 'visualField': 'right', 'word': 'pseudoword', 'corrAns': 2, 'task': 'LDT'},
          {'wordE': 'matrook', 'word1': 'متروك', 'xword1': 0.4, 'yword1': 0, 'visualField': 'right', 'word': 'word', 'corrAns': 1, 'task': 'LDT'}]
        Routine LDPractice
        Routine LDPRacticeResponse
      LoopTerminator practiceTrial
      Routine taskInst
      LoopInitiator LDTrial loopType="TrialHandler"
        conditionsFile = LDWordList.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'wordE': 'sharif', 'word1': 'شريف', 'condition': 'Word', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'sharif', 'word1': 'شَريْفُ', 'condition': 'Word', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': '7azeen', 'word1': 'حزين', 'condition': 'Orthography', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': '7azeen', 'word1': 'حَزيْنُ', 'condition': 'Orthography', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'so2al', 'word1': 'سؤال', 'condition': 'Morphology', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'so2al', 'word1': 'سُؤْالٌ', 'condition': 'Morphology', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'},
          {'wordE': 'nosous', 'word1': 'نصوص', 'condition': 'Control', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'fontsize': 0.2, 'visualField': 'right', 'type': 'word', 'corrAns': 1, 'task': 'LDT'}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
        Routine LDTask
        Routine LDResponse_2
      LoopTerminator LDTrial
      Routine LDBreak
    LoopTerminator LDTaskOrder
    LoopInitiator SDTaskOrder loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask2
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      Routine SDInitalCode
      Routine SDInst1
      Routine SDInst2
      Routine SDPracticeInst
      Routine fixationInst_4
      LoopInitiator SDPracticeTrial loopType="TrialHandler"
        conditionsFile = SD_PracticeArb.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'wordE': 'sharif', 'word1': 'شريف', 'word2': 'شريف', 'xword1': -0.4, 'yword1': 0, 'xword2': -0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'left', 'same': 'same', 'corrAns': 1, 'language': 'Arabic', 'task': 'SDT'},
          {'wordE': 'sharif', 'word1': 'شَريْفُ', 'word2': 'شَريْفُ', 'xword1': -0.4, 'yword1': 0, 'xword2': -0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'left', 'same': 'same', 'corrAns': 1, 'language': 'Arabic', 'task': 'SDT'},
          {'wordE': '7azeen', 'word1': 'حَزيْنُ', 'word2': 'حَزيْنُ', 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'same', 'corrAns': 1, 'language': 'Arabic', 'task': 'SDT'},
          {'wordE': 'encha2', 'word1': 'إنشاء', 'word2': 'شقيق', 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'different', 'corrAns': 2, 'language': 'Arabic', 'task': 'SDT'},
          {'wordE': 'matrook', 'word1': 'مَتروْكٍ', 'word2': 'مَسْرورٌ', 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'different', 'corrAns': 2, 'language': 'Arabic', 'task': 'SDT'},
          {'wordE': 'ma3doud', 'word1': 'معدود', 'word2': 'صبور', 'xword1': -0.4, 'yword1': 0, 'xword2': -0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'left', 'same': 'different', 'corrAns': 2, 'language': 'Arabic', 'task': 'SDT'}]
        Routine SDPractice
        Routine SDPracticeResponse
      LoopTerminator SDPracticeTrial
      Routine SDTaskInst
      LoopInitiator SDTRial loopType="TrialHandler"
        conditionsFile = SDWordList.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'wordE': 'sharif', 'word1': 'شريف', 'word2': 'شريف', 'condition': 'Word', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'same', 'corrAns': 1, 'task': 'SDT'},
          {'wordE': 'sharif', 'word1': 'شَريْفُ', 'word2': 'شَريْفُ', 'condition': 'Word', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'same', 'corrAns': 1, 'task': 'SDT'},
          {'wordE': 'sharif', 'word1': 'شريف', 'word2': 'كمان', 'condition': 'Word', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'different', 'corrAns': 2, 'task': 'SDT'},
          {'wordE': 'sharif', 'word1': 'شَريْفُ', 'word2': 'كَمَانْ', 'condition': 'Word', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'different', 'corrAns': 2, 'task': 'SDT'},
          {'wordE': '7azeen', 'word1': 'حزين', 'word2': 'حزين', 'condition': 'Orthography', 'diacritics': 0, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'same', 'corrAns': 1, 'task': 'SDT'},
          {'wordE': '7azeen', 'word1': 'حَزيْنُ', 'word2': 'حَزيْنُ', 'condition': 'Orthography', 'diacritics': 1, 'xword1': 0.4, 'yword1': 0, 'xword2': 0.4, 'yword2': 0, 'fontsize': 0.2, 'visualField': 'right', 'same': 'same', 'corrAns': 1, 'task': 'SDT'}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
        Routine SDTask
        Routine SDResponse
      LoopTerminator SDTRial
      Routine SDBreak
    LoopTerminator SDTaskOrder
  LoopTerminator taskOrder
